<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoSerialPort</io:Name>
          <io:PortName>COM4</io:PortName>
          <io:BaudRate>14400</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT10S</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="TimeSpanProperty">
          <Value>PT2S</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Time trial</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Some params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time trial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT1S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Time cam</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>data\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Videofile FrameRate</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.LocalDateTime</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0:yyyyMMdd_HHmmss}</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_cam1.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename cam video</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_cam1.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename cam csv</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_mic.wav</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename mic audio</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_mic.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename mic csv</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="17" Label="Source2" />
            <Edge From="16" To="17" Label="Source3" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="23" Label="Source2" />
            <Edge From="22" To="23" Label="Source3" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="29" Label="Source1" />
            <Edge From="27" To="29" Label="Source2" />
            <Edge From="28" To="29" Label="Source3" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="35" Label="Source1" />
            <Edge From="33" To="35" Label="Source2" />
            <Edge From="34" To="35" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Line (2- Steinberg UR44C)</al:DeviceName>
          <al:SampleRate>192000</al:SampleRate>
          <al:SampleFormat>Stereo16</al:SampleFormat>
          <al:BufferLength>100</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Audio stream</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Time trial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT12S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Audio stream</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename mic csv</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>data\20230627_135852_mic.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Time trial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT12S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename mic audio</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>data\20230627_135852_mic.wav</al:FileName>
          <al:Suffix>None</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>false</al:Overwrite>
          <al:SampleRate>192000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0.1S</rx:DueTime>
          <rx:Period>PT0.2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerialPort</io:PortName>
          <io:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Time cam</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT11S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23072328</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera stream</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Videofile FrameRate</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FrameRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename cam video</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename cam csv</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera stream</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>data\20230627_135852_cam1.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>50</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TimeInterval" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Interval.TotalMilliseconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>data\20230627_135852_cam1.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Item1,Item2,Item3</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="22" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="23" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="41" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="41" Label="Source3" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="49" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="39" To="44" Label="Source1" />
      <Edge From="39" To="46" Label="Source1" />
      <Edge From="39" To="47" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="48" Label="Source1" />
      <Edge From="46" To="48" Label="Source2" />
      <Edge From="47" To="48" Label="Source3" />
      <Edge From="48" To="49" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>