<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT10M</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Time cam</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Add">
          <Operand xsi:type="TimeSpanProperty">
            <Value>PT2S</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:ReplaySubject">
          <Name>Time trial</Name>
          <rx:BufferSize xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Some params</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>data\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Videofile FrameRate</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.LocalDateTime</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0:yyyyMMdd_HHmmss}</Format>
              <Selector />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_cam1.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename cam video</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_cam1.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename cam csv</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_mic.wav</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename mic audio</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Folder data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Datetime beginning</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_mic.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 + Item2 + Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename mic csv</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time cam</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="TimeSpanProperty">
                <Value>PT4S</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Time trial</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time cam</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Videofile FrameRate</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToDouble(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(1/it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.033S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Time cam 2</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Time trial</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="TimeSpanProperty">
                  <Value>PT1S</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Subtract" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:ReplaySubject">
                <Name>Time cam</Name>
                <rx:BufferSize xsi:nil="true" />
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="12" Label="Source2" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="18" Label="Source1" />
            <Edge From="16" To="18" Label="Source2" />
            <Edge From="17" To="18" Label="Source3" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="24" Label="Source1" />
            <Edge From="22" To="24" Label="Source2" />
            <Edge From="23" To="24" Label="Source3" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="30" Label="Source1" />
            <Edge From="28" To="30" Label="Source2" />
            <Edge From="29" To="30" Label="Source3" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="42" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="45" To="47" Label="Source1" />
            <Edge From="46" To="47" Label="Source2" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:DeviceName>Line (2- Steinberg UR44C)</al:DeviceName>
          <al:SampleRate>192000</al:SampleRate>
          <al:SampleFormat>Stereo16</al:SampleFormat>
          <al:BufferLength>100</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Audio stream</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Time trial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10M4S</rx:DueTime>
          <rx:Period>PT10H</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Audio stream</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(it as Timestamp_mic_bonsai_clock_s)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename mic csv</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>data\20240223_164727_mic.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp_mic_bonsai_clock_s</io:Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Time trial</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DueTime" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10M4S</rx:DueTime>
          <rx:Period>PT10H</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename mic audio</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>data\20240223_164727_mic.wav</al:FileName>
          <al:Suffix>None</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>false</al:Overwrite>
          <al:SampleRate>192000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23072328</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Add">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}</Format>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>FrameIDfromOne</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>CameraFrameID</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraImage</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraTimestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BonsaiTimestamp</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>ChunkData.ExposureEndLineStatusAll</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>CameraExposureEndLineAll</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image.Size</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraImageSize</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Time cam 2</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT9M59.967S</rx:DueTime>
                <rx:Period>PT10H</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ArduinoSerialPort</io:PortName>
                <io:NewLine />
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TimerCamEnd</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Videofile FrameRate</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FrameRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename cam video</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraImageSize</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>1440</drw:Width>
            <drw:Height>1080</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Image" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddImage">
          <drw:Destination>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
            <drw:Width>0</drw:Width>
            <drw:Height>0</drw:Height>
          </drw:Destination>
          <drw:Interpolation>Linear</drw:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameIDfromOne</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Text" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddText">
          <drw:Text>190</drw:Text>
          <drw:Alignment>Near</drw:Alignment>
          <drw:LineAlignment>Near</drw:LineAlignment>
          <drw:TextRenderingHint>AntiAliasGridFit</drw:TextRenderingHint>
          <drw:Color>
            <drw:Val0>240</drw:Val0>
            <drw:Val1>240</drw:Val1>
            <drw:Val2>240</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Font>Microsoft Sans Serif, 20pt</drw:Font>
          <drw:Origin>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
          </drw:Origin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>data\20240223_164727_cam1.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename cam csv</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BonsaiTimestamp</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTimestamp</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>CameraFrameID</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameIDfromOne</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item2 as Timestamp_camera_clock_ns, Item1 as Timestamp_bonsai_clock_s, Item3 as FrameID)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>data\20240223_164727_cam1.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp_camera_clock_ns,Timestamp_bonsai_clock_s,FrameID</io:Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTimestamp</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrameRateMonitor_1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>1/(it*1e-9)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DropFrames_1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Videofile FrameRate</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToDouble(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it.Item2 &lt; (it.Item2-2)) ? 1:0</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoSerialPort</io:Name>
          <io:PortName>COM4</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ArduinoDelayedTrigger</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Time cam</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="DueTime" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timer">
            <rx:DueTime>PT20S</rx:DueTime>
            <rx:Period>PT0S</rx:Period>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TimerCamEnd</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ArduinoDelayedTrigger</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerialPort</io:PortName>
          <io:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:TakeWhile">
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>KeyState</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>KeyState</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TakeUntil" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F8</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerialPort</io:PortName>
          <io:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="NotEqual">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
          <Value>F8</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>KeyState</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="23" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="24" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="33" Label="Source1" />
      <Edge From="25" To="35" Label="Source1" />
      <Edge From="25" To="37" Label="Source1" />
      <Edge From="25" To="39" Label="Source1" />
      <Edge From="25" To="41" Label="Source1" />
      <Edge From="25" To="43" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="26" To="32" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="61" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="61" Label="Source3" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="54" Label="Source1" />
      <Edge From="51" To="55" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="56" Label="Source1" />
      <Edge From="55" To="56" Label="Source2" />
      <Edge From="56" To="59" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="73" Label="Source2" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="71" Label="Source1" />
      <Edge From="68" To="71" Label="Source2" />
      <Edge From="69" To="71" Label="Source3" />
      <Edge From="70" To="71" Label="Source4" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="90" Label="Source2" />
      <Edge From="83" To="90" Label="Source3" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="87" Label="Source1" />
      <Edge From="86" To="87" Label="Source2" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="92" Label="Source1" />
      <Edge From="91" To="92" Label="Source2" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="94" To="100" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="97" To="98" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>